//	DataPro
//	DAC/ADC macros for use with Igor Pro and the ITC-16 or ITC-18
//	Nelson Spruston
//	Northwestern University
//	project began 10/27/1998

//	This is one of the only files you should modify as the user.

#pragma rtGlobals=1		// Use modern global access method.

Function SetupDigitizerForUser()
	// USER: DON'T CHANGE THE NEXT TWO LINES
	String savedDF=GetDataFolder(1)
	SetDataFolder root:DP_Digitizer
	
	// DECLARE THE digitizer variables
	WAVE /T unitsFromMode
	WAVE adcGainAll
	WAVE dacGainAll
	WAVE dacMultiplier
	NVAR testadc
	NVAR testdac
	NVAR tpamp
	NVAR tpgate
	NVAR tpgateamp
	NVAR tpdur
	// Variables for the Data Pulse (StepPulse_DAC)
	NVAR dplow
	NVAR dphigh
	NVAR dpshort
	NVAR dplong
	NVAR dpamp
	NVAR dpdur
	// Variables for synaptic stimulation
	NVAR synPulseDelay
	NVAR synPulseDuration
	
//	Set the units you will be working in for current and voltage
//	It is extremely important that you set the gains using the units you designate below
//	For example, if you want to work in pA for current units,
//	but your amplifier says the gain is 1 V/nA, you need to set the gain to 0.001 (V/pA)
	unitsFromMode={"pA","mV"}
//	set up the dac and adc channels and gains (default values)
//	for voltage clamp, units are unitsVoltage/V
	dacGainAll[0][0]=10000
	dacGainAll[1][0]=10000
	dacGainAll[2][0]=10000		// for Isolator-10, make it 0.001, units are mA/V
	dacGainAll[3][0]=10000
//	for current clamp, units are unitsCurrent/V
	dacGainAll[0][1]=20
	dacGainAll[1][1]=20	
	dacGainAll[2][1]=20
	dacGainAll[3][1]=20
//	multiplier values for dacs
	dacMultiplier[0]=1
	dacMultiplier[1]=1
	dacMultiplier[2]=1
	dacMultiplier[3]=1
//	read ADCgain values off the appropriate output on the amplifier
//	don't forget filter gain and appropriate units conversion
//	for voltage clamp, units are volts/unitsCurrent 
	adcGainAll[0][0]=0.0001
	adcGainAll[1][0]=0.0001
	adcGainAll[2][0]=0.0001
	adcGainAll[3][0]=0.0001
	adcGainAll[4][0]=0.0001
	adcGainAll[5][0]=0.0001
	adcGainAll[6][0]=0.0001
	adcGainAll[7][0]=0.0001
//	for current clamp, units are volts/unitsVoltage
	adcGainAll[0][1]=0.01
	adcGainAll[1][1]=0.01
	adcGainAll[2][1]=0.01
	adcGainAll[3][1]=0.01
	adcGainAll[4][1]=0.01
	adcGainAll[5][1]=0.01
	adcGainAll[6][1]=0.01
	adcGainAll[7][1]=0.01
//	Variables related to the Test Pulse
	testadc=0			// display ADC in test pulse window
	testdac=0			// output DAC for test pulse
	tpamp=1
	tpgate=5000
	tpgateamp=10
	tpdur=10
//	Variables for the Data Pulse (StepPulse_DAC)
	dplow=1
	dphigh=200
	dpshort=50
	dplong=1000
	dpamp=dplow
	dpdur=dplong
//	Variables for synaptic stimulation
	synPulseDelay=50
	synPulseDuration=0.1
////	Variables for LTP analysis
//	SetDataFolder root:DP_Analysis
//	slope_left=8
//	slope_right=30
//	ltp_interval=10
////	Variables for analysis display
//	SetDataFolder root:DP_Browser
//	ymax=3
//	ymin=-3
//	xmin=0
//	xmax=100
//	acsrx=0
//	bcsrx=0
	// USER: DON'T CHANGE ANYTHING BELOW HERE
	SetDataFolder savedDF
End

Function SetupSweeperForUser()
	// USER: DON'T CHANGE THE NEXT TWO LINES
	String savedDF=GetDataFolder(1)
	SetDataFolder root:DP_Digitizer
	
	// DECLARE THE digitizer variables
	WAVE /T unitsFromMode
	WAVE adcGainAll
	WAVE dacGainAll
	WAVE dacMultiplier
	NVAR testadc
	NVAR testdac
	NVAR tpamp
	NVAR tpgate
	NVAR tpgateamp
	NVAR tpdur
	// Variables for the Data Pulse (StepPulse_DAC)
	NVAR dplow
	NVAR dphigh
	NVAR dpshort
	NVAR dplong
	NVAR dpamp
	NVAR dpdur
	// Variables for synaptic stimulation
	NVAR synPulseDelay
	NVAR synPulseDuration
	
//	Set the units you will be working in for current and voltage
//	It is extremely important that you set the gains using the units you designate below
//	For example, if you want to work in pA for current units,
//	but your amplifier says the gain is 1 V/nA, you need to set the gain to 0.001 (V/pA)
	unitsFromMode={"pA","mV"}
//	set up the dac and adc channels and gains (default values)
//	for voltage clamp, units are unitsVoltage/V
	dacGainAll[0][0]=10000
	dacGainAll[1][0]=10000
	dacGainAll[2][0]=10000		// for Isolator-10, make it 0.001, units are mA/V
	dacGainAll[3][0]=10000
//	for current clamp, units are unitsCurrent/V
	dacGainAll[0][1]=20
	dacGainAll[1][1]=20	
	dacGainAll[2][1]=20
	dacGainAll[3][1]=20
//	multiplier values for dacs
	dacMultiplier[0]=1
	dacMultiplier[1]=1
	dacMultiplier[2]=1
	dacMultiplier[3]=1
//	read ADCgain values off the appropriate output on the amplifier
//	don't forget filter gain and appropriate units conversion
//	for voltage clamp, units are volts/unitsCurrent 
	adcGainAll[0][0]=0.0001
	adcGainAll[1][0]=0.0001
	adcGainAll[2][0]=0.0001
	adcGainAll[3][0]=0.0001
	adcGainAll[4][0]=0.0001
	adcGainAll[5][0]=0.0001
	adcGainAll[6][0]=0.0001
	adcGainAll[7][0]=0.0001
//	for current clamp, units are volts/unitsVoltage
	adcGainAll[0][1]=0.01
	adcGainAll[1][1]=0.01
	adcGainAll[2][1]=0.01
	adcGainAll[3][1]=0.01
	adcGainAll[4][1]=0.01
	adcGainAll[5][1]=0.01
	adcGainAll[6][1]=0.01
	adcGainAll[7][1]=0.01
//	Variables related to the Test Pulse
	testadc=0			// display ADC in test pulse window
	testdac=0			// output DAC for test pulse
	tpamp=1
	tpgate=5000
	tpgateamp=10
	tpdur=10
//	Variables for the Data Pulse (StepPulse_DAC)
	dplow=1
	dphigh=200
	dpshort=50
	dplong=1000
	dpamp=dplow
	dpdur=dplong
//	Variables for synaptic stimulation
	synPulseDelay=50
	synPulseDuration=0.1
////	Variables for LTP analysis
//	SetDataFolder root:DP_Analysis
//	slope_left=8
//	slope_right=30
//	ltp_interval=10
////	Variables for analysis display
//	SetDataFolder root:DP_Browser
//	ymax=3
//	ymin=-3
//	xmin=0
//	xmax=100
//	acsrx=0
//	bcsrx=0
	// USER: DON'T CHANGE ANYTHING BELOW HERE
	SetDataFolder savedDF
End

// Use the AutoAnalyze function to call analysis that should occur after the acquisition of each sweep
Function AutoAnalyze()
	Print "Inside AutoAnalyze() function!"
End

