//	DataPro
//	DAC/ADC macros for use with Igor Pro and the ITC-16 or ITC-18
//	Nelson Spruston
//	Northwestern University
//	project began 10/27/1998
//	last updated 7/28/2004

#pragma rtGlobals=1		// Use modern global access method.
#include <Strings as Lists>

#include "DP_DigitizerModelMethods"
#include "DP_DigitizerViewMethods"
#include "DP_DigitizerControllerMethods"
#include "DP_Acquire"
#include "DP_BrowserModelMethods"
#include "DP_BrowserViewMethods"
#include "DP_BrowserControllerMethods"
#include "DP_TestPulse"
#include "DP_Analyze"
#include "DP_Utilities"
//#include "DP_Image"
//#include "DP_SIDX"
#include "DP_Windows"
#include "DP_MyVariables"
#include "DP_MyProcedures"
//#include "DP_LTP"

//---------------------- DataPro MENU -----------------------//

//Menu "DataPro"
//	"Start DataPro", StartDataPro()
//	"-"
//	"Main Panel", RaiseOrCreatePanel("DataPro")
//	"Sweep Control Panel", RaiseOrCreatePanel("SweepControl")
//	"Digitizer Control Panel", RaiseOrCreatePanel("DigitizerControl")
//	"-"
//	"New Browser", CreateDataProBrowser()
//	"-"
//	"Calibrator"
//	"SetDataUnits"
//	"GetRidofGraphAxes"
//	"Display Series"
//	"Kill Windows"
//	"Kill Waves With Name"
//End

Menu "DataPro"
	"Start",RaiseOrCreateMainWindows()
	"-"
	"Digitizer Control Panel", RaiseOrCreatePanel("DigitizerControl")
	"Sweep Control Panel", RaiseOrCreatePanel("SweepControl")
	"New Browser", CreateDataProBrowser()
	"-"
	"Test Pulse",NewTestPulseWindow()
	"-"
	"Five Segment DAC",LaunchFiveSegBuilder()
	"Train DAC",LaunchTrainBuilder()
	"Ramp DAC",LaunchRampBuilder()
	"PSC DAC",LaunchPSCBuilder()
	"Sine DAC",LaunchSineBuilder()
	"-"
	"DAC Viewer",DACViewer()
End

Function IgorStartOrNewHook(igorApplicationNameStr)
	String igorApplicationNameStr
	
	InitializeDataPro()
End

Function InitializeDataPro()
	String savDF=GetDataFolder(1)
	NewDataFolder /O/S root:DP_DigitizerControl
	String pathToThisFile=FunctionPath("")
	String dataProPathAbs=ParseFilePath(1,pathToThisFile,":",1,0)
		// first 1 says to get the path up but not including the specified element
		// second 1 says the specified element is relative to the last element
		// 0 indicates the zeroth element (relative to the last), hence the last element
	NewPath /O DataPro dataProPathAbs
	LoadPICT /O /P=DataPro "DataProMenu.jpg", DataProMenu
	SetupDigitizer()
	SetupDigitizerForMe()  // Allows user to set desired channel gains, etc.
	SetupDigitizerPostUser()
	MakeADCDACWaves()
	//NVAR dacout
	//NVAR outgain
	//outgain=SetDACGain(dacout)
	//SyncDACGainWaveToVars()
	//SyncADCGainWaveToVars()
//	NVAR adcin
//	NVAR ingain
//	ingain=SetADCGain(adcin)
	//BuildTestPulse()
	BuildStepPulse()
	BuildSynTTLPulse()
	//RaiseOrCreatePanel("DataProMain")
//	if (wintype("DataPro")<1)
//		DataPro()
//	endif
	SetDataFolder savDF
End

Function AcquisitionPopMenuProc(ctrlName,popNum,popStr) : PopupMenuControl
	String ctrlName
	Variable popNum
	String popStr
End

Function StartPanel() : Panel
	PauseUpdate; Silent 1		// building window...
	NewPanel /W=(271,307,737,541)
	SetDrawLayer UserBack
	SetDrawEnv fstyle= 1
	DrawText 68,30,"It is very important that you save this as an"
	SetDrawEnv fstyle= 1
	DrawText 38,56,"unpacked experiment before you begin acquiring data."
	SetDrawEnv fstyle= 1
	DrawText 66,85,"Click the start button below and this will be"
	SetDrawEnv fstyle= 1
	DrawText 86,115,"the first thing you are prompted to do."
	Button startbutton0,pos={177,136},size={100,30},proc=StartButtonProc,title="Start DataPro"
EndMacro

Function StartButtonProc(ctrlName) : ButtonControl
	String ctrlName
	Execute "StartDataPro()"
	DoWindow /K StartPanel
//	HideProcedures
//	SaveExperiment
End


